<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:bz="clr-namespace:BonZeb;assembly=BonZeb"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateFrame" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>EventArgs.Time</Selector>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Time</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateUniform">
          <gl:UniformName>switch_stim</gl:UniformName>
          <gl:ShaderName>loom</gl:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VideoAcquisition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CameraCapture">
                <cv:Index>0</cv:Index>
                <cv:CaptureProperties />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Image</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CalculateBackground</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Tab</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Image</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bz:CalculateBackground">
                <bz:PixelSearch>Brightest</bz:PixelSearch>
                <bz:NoiseThreshold>0</bz:NoiseThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SkipUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Background</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>VirtualOpenLoop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Image</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Background</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:AbsoluteDifference" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>70</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>40</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Centroid</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>fish_position_x</gl:UniformName>
                <gl:ShaderName>loom</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Y</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>fish_position_y</gl:UniformName>
                <gl:ShaderName>loom</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bz:CalculateTailPoints">
                <bz:DistTailBase>12</bz:DistTailBase>
                <bz:HeadingDirection>-1</bz:HeadingDirection>
                <bz:NumTailSegments>7</bz:NumTailSegments>
                <bz:DistTailPoints>6</bz:DistTailPoints>
                <bz:RangeTailPointAngles>120</bz:RangeTailPointAngles>
                <bz:PixelSearchMethod>Brightest</bz:PixelSearchMethod>
                <bz:OffsetX>0</bz:OffsetX>
                <bz:OffsetY>0</bz:OffsetY>
                <bz:TailPointCalculationMethod>PixelSearch</bz:TailPointCalculationMethod>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Points</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bz:CalculateTailCurvature" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>(it[it.Length-1] + it[it.Length-2] + it[it.Length-3]) / 3</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bz:CalculateHeadingAngle">
                <bz:InitializeHeadingAngleToZero>false</bz:InitializeHeadingAngleToZero>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>angle</gl:UniformName>
                <gl:ShaderName>loom</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>switch_stim</gl:UniformName>
                <gl:ShaderName>loom</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Time</Name>
            </Expression>
            <Expression xsi:type="Scan">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Accumulation</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item1 &gt; 5 ? 0 : it.Item1 + it.Item2</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it &gt; 2.982 ? 2.982 : it</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>single(it - 3)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>time</gl:UniformName>
                <gl:ShaderName>loom</gl:ShaderName>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="13" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="13" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="15" To="19" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Timer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Background</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT0S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT1M</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>