<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateFrame" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>EventArgs.Time</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>single(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateUniform">
          <gl:UniformName>time</gl:UniformName>
          <gl:ShaderName>visual_stimuli</gl:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:MouseMove" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:NormalizedDeviceCoordinates" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>single(0.5 * it.x + 0.5)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateUniform">
          <gl:UniformName>fish_position_x</gl:UniformName>
          <gl:ShaderName>visual_stimuli</gl:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>single(0.5 * it.y + 0.5)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateUniform">
          <gl:UniformName>fish_position_y</gl:UniformName>
          <gl:ShaderName>visual_stimuli</gl:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateUniform">
          <gl:UniformName>stimulus_number</gl:UniformName>
          <gl:ShaderName>visual_stimuli</gl:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateUniform">
          <gl:UniformName>fish_heading_angle</gl:UniformName>
          <gl:ShaderName>visual_stimuli</gl:ShaderName>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>